PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = standard
  Screen = 1
  Units = norm
  Use version = 2022.2.5
  Window size (pixels) = [1496, 967]
  color = black
  expName = card-task-brief-money
  keyboardBackend = Pyglet
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Routines
  Routine PunishmentOutcome
    PolygonComponent rect_out_pun
      fillColor = black
      lineWidth = 5
      pos [set every repeat] = $cardxy
      shape = rectangle
      size [set every repeat] = $cardsize
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    TextComponent feedback_pun
      letterHeight [set every repeat] = $numbersize
      pos [set every repeat] = $cardxy
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $outcome
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    TextComponent display_pun
      color [set every repeat] = $color
      letterHeight [set every repeat] = $disp_msg_size
      pos [set every repeat] = msg_xy
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $pundisplay
      wrapWidth = 0.2
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    TextComponent ITI2_pun
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = $iti2
      text [set every repeat] = +
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    ImageComponent image_pun
      image [set every repeat] = $punimage
      pos [set every repeat] = $outtypeimg_xy
      size [set every repeat] = $punimagesize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_redx
      image [set every repeat] = images/symbolNOsuccess_small.png
      pos [set every repeat] = $checkx_xy
      size [set every repeat] = $disp_checkx_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine EndText
    CodeComponent format_total
      Code Type = Py
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      Begin Routine:
        totalwon_formatted = "$%.2f" % (totalwon)
    TextComponent Finished
      letterHeight = 0.1
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = $"Thanks for playing!\n\nYour total:"
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    TextComponent Total_display
      letterHeight = 0.12
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $totalwon_formatted
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    KeyboardComponent key_resp_2
      allowedKeys = 'space','1','2','3','4','x','q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine RewardOutcome
    PolygonComponent rect_out_rew
      fillColor = black
      lineWidth = 5
      pos [set every repeat] = $cardxy
      shape = rectangle
      size [set every repeat] = $cardsize
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    TextComponent feedback_rew
      letterHeight [set every repeat] = $numbersize
      pos [set every repeat] = $cardxy
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every frame] = $outcome
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    TextComponent display_rew
      color [set every repeat] = $color
      letterHeight [set every repeat] = $disp_msg_size
      pos [set every repeat] = $msg_xy
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $rewdisplay
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    TextComponent ITI2_rew
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = $iti2
      text [set every repeat] = +
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    ImageComponent image_rew
      image [set every repeat] = $rewimage
      pos [set every repeat] = $outtypeimg_xy
      size [set every repeat] = $rewimagesize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_greencheck
      image [set every repeat] = images/symbolsuccess_small.png
      pos [set every repeat] = $checkx_xy
      size [set every repeat] = $disp_checkx_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Instructions
    TextComponent Inst1
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In this part of the study you will play a card guessing game to win money.

        Press ‘1’ to continue.
    KeyboardComponent response1
      allowedKeys = '1','b'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent setupvars
      Code Type = Py
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      Begin Experiment:
        totalwon = 0.0
        rew_amount = 1.0
        pun_amount = .5
        iti1rew_code1 = [1,1,1,1,1,3,3,3,5,5]
        iti2rew_code1 = [4,4,4,4,4,6,6,6,8,8]
        iti1pun_code1 = [1,1,1,1,1,3,3,3,5,5]
        iti2pun_code1 = [4,4,4,4,4,6,6,6,8,8]
        #iti1rew_code2 = [1,1,1,1,1,3,3,3,5,5]
        #iti2rew_code2 = [4,4,4,4,4,6,6,6,8,8]
        #iti1pun_code2 = [1,1,1,1,1,3,3,3,5,5]
        #iti2pun_code2 = [4,4,4,4,4,6,6,6,8,8]
        #iti1rew_code3 = [1,1,1,1,1,3,3,3,5,5]
        #iti2rew_code3 = [4,4,4,4,4,6,6,6,8,8]
        #iti1pun_code3 = [1,1,1,1,1,3,3,3,5,5]
        #iti2pun_code3 = [4,4,4,4,4,6,6,6,8,8]
        shuffle(iti1rew_code1)
        shuffle(iti2rew_code1)
        shuffle(iti1pun_code1)
        shuffle(iti2pun_code1)
        #shuffle(iti1rew_code2)
        #shuffle(iti2rew_code2)
        #shuffle(iti1pun_code2)
        #shuffle(iti2pun_code2)
        #shuffle(iti1rew_code3)
        #shuffle(iti2rew_code3)
        #shuffle(iti1pun_code3)
        #shuffle(iti2pun_code3)
        #rewlargeimagelist = ['high1.jpg','high2.jpg','high3.jpg','high4.jpg','high5.jpg','high6.jpg','high7.jpg','high8.jpg','high9.jpg','high10.jpg']
        #punlargeimagelist = ['low1.jpg','low2.jpg','low3.jpg','low4.jpg','low5.jpg','low6.jpg','low7.jpg','low8.jpg','low9.jpg','low10.jpg']
        #shuffle(rewlargeimagelist)
        #shuffle(punlargeimagelist)
        win.mouseVisible = False
  Routine Instructions_2
    TextComponent Inst1_2
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You will play many repeated trials of the guessing game. The text on the screen will tell you what type of reward you are playing for.

        Press ‘1’ to continue.
    KeyboardComponent response1_2
      allowedKeys = '1', 'b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_3
    TextComponent Inst1_3
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        How to play the game:

        Everytime you see a “?” card on the screen your job is to guess whether the number on the card is lower or higher than 5.

        If you want to guess a LOW number
             -Press the ‘1’ button-

        If you want to guess a HIGH number
             -Press the ‘2’ button-

        Possible card values range from 1-4 (lower) and (6-9) higher, but will never be 5. You have 2 seconds to make your guess for each card. Shortly after your guess the card value will be displayed.

        Press ‘1’ to continue.
    KeyboardComponent response1_3
      allowedKeys = '1', 'b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trigger
    TextComponent Inst1_4
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text = The task will begin in a few moments.
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    KeyboardComponent trigger_input
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine settrialtype_routine
    CodeComponent settrialtype
      Code Type = Py
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      Begin Routine:
        largeimage = "images/black.jpg"
        #code to specify isi/iti (ensures same isi/itis for wins and losses)
        if win1lose0==1:
            nRew=1
            nPun=0
            #code to handle multiple reward types (ensures same isis/itis for each condition)
            if blockcode == 1:
                iti1 = iti1rew_code1.pop()
                iti2 = iti2rew_code1.pop()
        #    elif blockcode == 2:
        #        iti1 = iti1rew_code2.pop()
        #        iti2 = iti2rew_code2.pop()
        #    elif blockcode == 3: #use for rewards that involve a picture
        #        largeimage = "images/" + rewlargeimagelist.pop()
        #        iti1 = iti1rew_code3.pop()
        #        iti2 = iti2rew_code3.pop()
        else:
            nRew=0
            nPun=1
            #code to handle multiple reward types (ensures same isis/itis for each condition)
            if blockcode == 1:
                iti1 = iti1pun_code1.pop()
                iti2 = iti2pun_code1.pop()
        #    elif blockcode == 2:
        #        iti1 = iti1pun_code2.pop()
        #        iti2 = iti2pun_code2.pop()
        #    elif blockcode == 3: #use for rewards that involve a picture
        #        largeimage = "images/" + punlargeimagelist.pop()
        #        iti1 = iti1pun_code3.pop()
        #        iti2 = iti2pun_code3.pop()
  Routine Reward_resp
    PolygonComponent rect_resp_rew
      fillColor = black
      lineWidth = 5
      pos [set every repeat] = $cardxy
      shape = rectangle
      size [set every repeat] = $cardsize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent quest_rew
      letterHeight [set every repeat] = $numbersize
      pos [set every repeat] = $cardxy
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = ?
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    KeyboardComponent response_rew
      allowedKeys = '1','2','b','y'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      store = all keys
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    CodeComponent setoutcomerew
      Code Type = Py
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      End Routine:
        #money = '+$1';
        color = [-1.0,1.0,-1.0];
        rewdisplay = block_rewdisplay
        #if blockcode == 1: #money
        #    rewimage = "images/money.jpg"
        #    rewimagesize = outtypeimg_size
        #    punimage = "images/moneyloss.jpg"
        #    punimagesize = outtypeimg_size
        #    rewdisplay = "+$%.2f" % (rew_amount)
        #    pundisplay = "-$%04.2f" % (pun_amount)
            #cardxy = (0,0)
        #elif blockcode == 2: #cigarette
        #    rewimage = "images/cig.jpg"
        #    rewimagesize = outtypeimg_size
        #    punimage = "images/cigloss.jpg"
        #    punimagesize = outtypeimg_size
        #    rewdisplay = "+2 puffs"
        #    pundisplay = "-1 puff"
        #    cardxy = (-0.25,0)
        #elif blockcode == 3: #images
        #    rewimage = "images/black.jpg"
        #    punimage = "images/black.jpg"
        #    rewimagesize = 0
        #    punimagesize = 0
        #    rewdisplay = ""
        #    pundisplay = ""
        #    cardxy = (-0.5,0)
        disp_checkx_size = checkx_size
        disp_msg_size = msg_size
        #print(response_rew.keys)
        if response_rew.keys:
            if (response_rew.keys[0] == '1') or (response_rew.keys[0] == 'b'):
                #print(response_rew.keys)
                outcome = np.random.randint(1,4);
                totalwon = totalwon + rew_amount
                largeimagesize = (0,0)
            #    if blockcode == 3:
            #        largeimagesize = (.8,.8)
            #    else:
            #        largeimagesize = (0,0)
            elif (response_rew.keys[0] == '2') or (response_rew.keys[0] == 'y'):
                #print(response_rew.keys)
                outcome = np.random.randint(6,9);
                totalwon = totalwon + rew_amount
                largeimagesize = (0,0)
            #    if blockcode == 3:
            #        largeimagesize = (.8,.8)
            #    else:
            #        largeimagesize = (0,0)
            else: #covers case of invalid key pressed
                outcome = "#";
                rewdisplay = 'no response';
                disp_msg_size = noresp_msg_size
                color = [1.0,1.0,1.0];
                largeimagesize = (0,0)
                disp_checkx_size = (0,0)
        else: #covers empty response variable case
            #print(response_rew.keys)
            outcome = "#";
            rewdisplay = 'no response';
            disp_msg_size = noresp_msg_size
            color = [1.0,1.0,1.0];
            largeimagesize = (0,0)
            disp_checkx_size = (0,0)


        #debug
        print("running total %.2f" % totalwon)
    TextComponent ITI1_rew
      letterHeight = 0.1
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = $iti1
      text [set every repeat] = +
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  Routine Punishment_resp
    PolygonComponent rect_resp_pun
      fillColor = black
      lineWidth = 5
      pos [set every repeat] = $cardxy
      shape = rectangle
      size [set every repeat] = $cardsize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent quest_pun
      letterHeight [set every repeat] = $numbersize
      pos [set every repeat] = $cardxy
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = ?
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    KeyboardComponent response_pun
      allowedKeys = '1','2','b','y'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = all keys
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    CodeComponent setoutcomepun
      Code Type = Py
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      End Routine:
        #money = '-$0.50';
        color = [1.0,-1.0,-1.0]
        pundisplay = block_pundisplay
        #if blockcode == 1: #money
        #    rewimage = "images/money.jpg"
        #    rewimagesize = outtypeimg_size
        #    punimage = "images/moneyloss.jpg"
        #    punimagesize = outtypeimg_size
        #    rewdisplay = "+$%.2f" % (rew_amount)
        #    pundisplay = "-$%04.2f" % (pun_amount)
            #cardxy = (-0.25,0)
        #elif blockcode == 2: #cigarette
        #    rewimage = "images/cig.jpg"
        #    rewimagesize = outtypeimg_size
        #    punimage = "images/cigloss.jpg"
        #    punimagesize = outtypeimg_size
        #    rewdisplay = "+2 puffs"
        #    pundisplay = "-1 puff"
        #    cardxy = (-0.25,0)
        #elif blockcode == 3: #images
        #    rewimage = "images/black.jpg"
        #    punimage = "images/black.jpg"
        #    rewimagesize = 0
        #    punimagesize = 0
        #    rewdisplay = ""
        #    pundisplay = ""
        #    cardxy = (-0.5,0)

        disp_checkx_size = checkx_size
        disp_msg_size = msg_size
        print(response_rew.keys)
        if response_pun.keys:
            if (response_pun.keys[0] == '1') or (response_pun.keys[0] == 'b'):
                #print(response_rew.keys)
                outcome = np.random.randint(6,9)
                totalwon = totalwon - pun_amount
                largeimagesize = (0,0)
            #    if blockcode == 3:
            #        largeimagesize = (.8,.8)
            #    else:
            #        largeimagesize = (0,0)
            elif (response_pun.keys[0] == '2') or (response_pun.keys[0] == 'y'):
                #print(response_rew.keys)
                outcome = np.random.randint(1,4)
                totalwon = totalwon - pun_amount
                largeimagesize = (0,0)
            #    if blockcode == 3:
            #        largeimagesize = (.8,.8)
            #    else:
            #        largeimagesize = (0,0)
            else: #covers case of invalid key pressed first
                outcome = "#"
                pundisplay = 'no response'
                disp_msg_size = noresp_msg_size
                color = [1.0,1.0,1.0]
                largeimagesize = (0,0)
                disp_checkx_size = (0,0)
        else: #covers case of empty response variable
            outcome = "#"
            pundisplay = 'no response'
            disp_msg_size = noresp_msg_size
            color = [1.0,1.0,1.0]
            largeimagesize = (0,0)
            disp_checkx_size = (0,0)

        #debug
        print("running total %.2f" % totalwon)
    TextComponent ISI2
      letterHeight = 0.1
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = $iti1
      text [set every repeat] = +
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  Routine blockstart
    TextComponent text_block
      letterHeight = 0.08
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text = In this block of trials, you will try to win:
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    TextComponent text_blocktype
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text [set every repeat] = $blocktype
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
      text = .
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    CodeComponent setblockvars
      Code Type = Py
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      Begin Routine:
        cardsize = (.4, .8)
        cardxy = (0,0)
        numbersize = .14
        numberxy = (0,0)
        msg_xy = (.35,-.2)
        msg_size = .14
        noresp_msg_size = .08
        outtypeimg_xy = (.35,0)
        outtypeimg_size = (.15,.15)
        checkx_size = (.15,.15)
        checkx_xy = (0,-.2)
        #largeimagexy = (0.5,0)

        if blockcode == 1: #money
            rewimage = "images/money.jpg"
            rewimagesize = outtypeimg_size
            punimage = "images/moneyloss.jpg"
            punimagesize = outtypeimg_size
            block_rewdisplay = "+$%.2f" % (rew_amount)
            block_pundisplay = "-$%04.2f" % (pun_amount)

            #cardxy = (-0.25,0)
        #elif blockcode == 2: #cigarette
        #    rewimage = "images/cig.jpg"
        #    rewimagesize = outtypeimg_size
        #    punimage = "images/cigloss.jpg"
        #    punimagesize = outtypeimg_size
        #    rewdisplay = "+2 puffs"
        #    pundisplay = "-1 puff"
        #    cardxy = (-0.25,0)
        #elif blockcode == 3: #images
        #    rewimage = "images/black.jpg"
        #    punimage = "images/black.jpg"
        #    rewimagesize = 0
        #    punimagesize = 0
        #    rewdisplay = ""
        #    pundisplay = ""
        #    cardxy = (-0.5,0)
  Routine firstITI4s
    TextComponent firstTrialITI
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = +
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  Routine routine_1
  Routine test
    SliderComponent slider
      forceEndRoutine = False
      granularity = 1
      initVal = 4
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine rating_instruction
    TextComponent slider_instruction
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Before the task can begin, you will be asked to use a slider scale to rate your feelings.

        Pressing the "1" button will move the slider to the left while pressing the "2" will move the slider to the right.

        Once you have picked your desired answer , press the "3" to go to the next question.

        Press '1' to continue to the first question.
    KeyboardComponent ratinginstruct_resp
      allowedKeys = '1', 'b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  Routine Instructions_2
  Routine Instructions_3
  Routine trigger
  Routine firstITI4s
  LoopInitiator blocks loopType="TrialHandler"
    conditions = [OrderedDict([('blocktype', 'money'), ('blockcode', 1)])]
    conditionsFile = design/card-task-brief-blocks.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine blockstart
    LoopInitiator innertrials loopType="TrialHandler"
      conditionsFile = design/card-task-brief-trials.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('win1lose0', 1)]),
        OrderedDict([('win1lose0', 1)]),
        OrderedDict([('win1lose0', 1)]),
        OrderedDict([('win1lose0', 1)]),
        OrderedDict([('win1lose0', 1)]),
        OrderedDict([('win1lose0', 0)]),
        OrderedDict([('win1lose0', 0)]),
        OrderedDict([('win1lose0', 0)]),
        OrderedDict([('win1lose0', 0)]),
        OrderedDict([('win1lose0', 0)])]
      Routine settrialtype_routine
      LoopInitiator Reward loopType="TrialHandler"
        loopType = sequential
        nReps = nRew
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        Routine Reward_resp
        Routine RewardOutcome
      LoopTerminator Reward
      LoopInitiator Punish loopType="TrialHandler"
        loopType = sequential
        nReps = nPun
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        Routine Punishment_resp
        Routine PunishmentOutcome
      LoopTerminator Punish
    LoopTerminator innertrials
  LoopTerminator blocks
  Routine EndText
